# Configuration for the SPARC v2 system
SPARC2-Fiber: {
    class: Microscope,
    role: sparc2,
    children: ["SEM E-beam", "SEM Detector", "Calibration Light",
               "Optical Path Properties",
               "Camera", "Spectrometer", "CL Detector", "CL PMT", "CL PMT control unit",
               "Spectrograph", "Spectrograph focus", "Spec CCD Flipper", 
               "Mirror Actuators", "Mirror Actuators in XY referential", "Slit",
               "Spectrometer Selector", "Fiber Detector", "Fiber align",
               "Time Correlator", "Photon counter sync", "Photon counter signal",
               "CL Selector", "CL Filter Wheel", # Disabled if no plate 2
               # "TC Filter Wheel", "TC Optical Density Filter", "Shutter 0", "Shutter 1",
               "Lens1 Mover", "Lens2 Switch", "Spec Filter Wheel"],
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: "brightlight",
    power_supplier: "Power Control Unit",
    affects: ["Camera", "Spectrometer", "Fiber Detector", 
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
#        port: "/dev/fake", # for simulator
        port: "/dev/ttyPMT*",
        pin_map: {
            "Camera": 0,
            "Spectrograph": 2,
            "Optical Actuators": 4,
            "CL PMT control unit": 5,
            "Calibration Light": 6,
        },
        delay: { # Time it takes (in s) before a component is accessible
            "Calibration Light": 1, # To turn on/off the light, with most bulbs it's very fast
            "Camera": 2,
            "Spectrograph": 90, # SR-193 needs a looong time to initialise
            "Optical Actuators": 2,
            "CL PMT control unit": 0,
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Calibration Light": True, # turn if on initially, to warm up. It will automatically be off when the component starts
            "Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True,
        },
        # List of EEPROM IDs (of the plates) which are required to start properly
        ids: [23be9e310300008a, 233b7e3103000051],
        # ids: [23be9e310300008a, 23c3de31030000b1],
    }
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
       detector1: "CL PMT",
    #    detector2: "TR CL PMT",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM Scan Interface, so no class
    creator: "SEM Scan Interface",
    role: e-beam,
    init: {
        channels: [1, 0],
        # On Delmic scanning box v2, the voltage is x2, so need to specify twice smaller values than needed.
        limits: [[2.77, -2.77], [1.82, -1.82]],  # V
        park: [-3.5, -3.5], # V
        max_res: [5760, 3840], # px
        # Digital output port mapping on the Delmic scanning box v2:
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        scanning_ttl: {4: True}, # output ports -> True (indicate scanning) or False (indicate parked)
        hfw_nomag: 0.412, # m  # TODO : Compute
        settle_time: 30.e-6, # s  # TODO: Check ****
    },
    properties: {
        scale: [8, 8], # (ratio), start with a pretty fast scan
        dwellTime: 3.e-6, # s
        magnification: 100, # (ratio), start low for a big field of view
    },
    affects: ["SEM Detector", "Camera", "Spectrometer", "Fiber Detector", 
              "Time Correlator", "Photon counter sync", "Photon counter signal"], # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI1/AI9 (differential)
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 1,
        limits: [-3, 3], # V
    },
}

# CL PMT: composed of the control unit + the PMT output connected to the DAQ board

# Must be connected on AI0/AI8 (differential)
"CL PMT": { # the raw detector of the PMT
    # Internal child of SEM Scan Interface, so no class but instead a creator
    creator: "SEM Scan Interface",
    role: null,
    init: {
        channel: 0,
        limits: [-2.5, 2.5], # V
    },
}

# "TR CL PMT": { # the raw detector of the PMT
#     # Internal child of SEM Scan Interface, so no class but instead a creator
#     role: null,
#     init: {
#         channel: 2,
#         # TODO: check the limits
#         limits: [-2.5, 2.5], # V, with contrast reversed
#     },
# }

"CL PMT control unit": {
    class: pmtctrl.PMTControl,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/ttyPMT*",
        #port: "/dev/fake", # for simulator
        prot_time: 0.0002,  # s
        prot_curr: 20.e-6,  # A
    }
}

"CL Detector": {
    class: pmtctrl.PMT,
    role: cl-detector,
    init: {
        settle_time: 0.5,  # s, time for the gain to be fully active
    },
    children: {
       "detector": "CL PMT",
       "pmt-control": "CL PMT control unit",
       # "pmt-signal": "Photon counter signal",
    },
}

# Dedicated Andor Newton camera for spectrum acquisition
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    #power_supplier: "Power Control Unit",
    init: {
        #device: 0,
        device: "23175" ,
        transp: [-1, 2], # if mirrored on X axis, change 1 to -1
        shutter_times: [50.e-3, 50.e-3], # s, opening/closing times of the shutter  # TODO: put the right values
    },
    properties: {
        shutterMinimumPeriod: 0.1, # s  = Max 10Hz frequency # TODO: put the right value for the shutter
        targetTemperature: -65,
        fanSpeed: 0, # °C  # TODO: might be possible to go a bit further below
    },
}

# VIS-NIR Spectrometer = Andor Newton + Shamrock SR193 (connected via USB)
"Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer,
    children: {detector: "Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [-1, 2], # inverse X axis
    },
    properties: {
#        binning: [1, 1000],  # default binning x height
    },
}

# Note that the next two components actually move the _same_ axis!
# Mirror & Lens in Plate 2, to change X&Y of fiber alignment
"Fiber align": {
    class: actuator.MultiplexActuator,
    role: "fiber-aligner",
    dependencies: {"x": "Optical Actuators", "y": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel", "y": "fiby"},
        ref_on_init: ["y"],
    },
    affects: ["Time Correlator", "Photon counter sync", "Photon counter signal"],
}

"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: "SR-2875",
        #device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: "pass-through",
            2: [375.e-9, 425.e-9], # pos -> m,m
            3: [425.e-9, 475.e-9],
            4: [475.e-9, 525.e-9],
            5: [525.e-9, 575.e-9],
            6: [575.e-9, 625.e-9],
        },
        fstepsize: 30.e-6, # m, size of one focus step  (Note: it used to be set at 10µm, but from physical inspection 30µm seems more correct)
        drives_shutter: [0], # flipper positions: the Spectral Camera drives the shutter
    },
    affects: ["Camera", "Spectrometer"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    children: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["Camera", "Spectrometer"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
# It doesn't select the camera (as there is only one), but allows to make some
# kind of blanker for the CCD
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    children: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["Camera", "Spectrometer"],
            1.5707963267948966: [],
        },
    },
    affects: ["Camera", "Spectrometer"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    children: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["Camera", "Spectrometer"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.32, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [600, 610], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       # TODO: update for the Quanta
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    affects: ["Camera", "Spectrometer", "Fiber Detector",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# Controller for the motors moving the various parts of the optical box
# DIP must be configured with address 2 (= 0100000)
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        port: "/dev/ttyTMCM*",
        # port: "/dev/fake6",
        address: 2,
        # address: null,
        axes: ["l1", "l2", "spec-sel", "fiby", "slit"],
        # These values only need to be roughly correct
        ustepsize: [25.1e-9, 25.1e-9, 25.1e-9, 5.86e-9, 5.e-9], # m/µstep
        rng: [null, null, null, [-3.e-3, 3.e-3], null], #to limit the fiby movement
        unit: ["m", "m", "m", "m", "m"],
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "spec-sel": 4, "fiby": 4},
        inverted: ["l2"],
    },
}

# "Optical Actuators": {
#     class: tmcm.TMCLController,
#     role: null,
#     power_supplier: "Power Control Unit",
#     init: {
#         port: "/dev/ttyTMCM*",
#         address: 2,
#         axes: ["l1", "l2", "cl-sel", "fw", "slit"],
#         # These values only need to be roughly correct
#         ustepsize: [25.1e-9, 25.1e-9, 26.1e-9, 3.392e-5, 5.e-9], # m/µstep, excepted for the fw: rad/µstep
#         unit: ["m", "m", "m", "rad", "m"],
#         refproc: "Standard",
#         refswitch: {"l1": 0, "l2": 0, "cl-sel": 4, "fw": 4},
#         inverted: ["l2"],
#         param_file: "/usr/share/odemis/sparc2-atm-tmcm6110-pmt.tmcm.tsv",
#     },
# }

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0316005737} # m
    },
    affects: ["Lens2 Switch"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.FixedPositionsActuator,
    role: "lens-switch",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "l2",
        positions: {
            -0.060310003: "on",
            0.0: "off", # completely out of the path
        },
    },
    affects: ["Camera", "Spectrometer", "Fiber Detector",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: "slit-in-big",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            -0.0: "on", # fully opened
            0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["Camera", "Spectrometer"],
}

# Mirror in Plate 2, selects between spectrometer and cl-detector
"CL Selector": {
    class: actuator.FixedPositionsActuator,
    role: "cl-det-selector",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "cl-sel",
        positions: {
            0.00123453: ["CL Detector"],
            0.0388107: ["Spec CCD Flipper"]
        },
    },
    affects: ["Camera", "Spectrometer", "CL Detector"],
}

"CL Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: "cl-filter",
    children: {"band": "Optical Actuators"},
    init: {
        axis_name: "fw",
        # It supports up to 8 filters
        positions: {
            # pos (rad) -> m,m
            0.3392:        "pass-through",        # 1
            1.1245981634:  [375.e-9, 425.e-9],    # 2
            1.90999632679: [425.e-9, 475.e-9],    # 3
            2.69539:       [475.e-9, 525.e-9],    # 4
            3.48079:       [525.e-9, 575.e-9],    # 5
            4.26619081699: [575.e-9, 625.e-9],    # 6
            5.05159:       [625.e-9, 675.e-9],    # 7
            5.83699:       [675.e-9, 725.e-9],    # 8
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["CL Detector", "Time Correlator", "Photon counter sync", "Photon counter signal", "CL Detector"],
}

"Fiber align": {
    class: actuator.MultiplexActuator,
    role: "fiber-aligner",
    children: {"x": "Optical Actuators", "y": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel", "y": "fiby"},
        ref_on_init: ["y"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        # TODO put correct value
        FAV_POS_ACTIVE: {"y": 0.00123944274}, # m
    },
    affects: ["Fiber Detector", "Camera", "Spectrometer"],
}

# "TC Filter Wheel": {
#     class: actuator.FixedPositionsActuator,
#     role: "tc-filter",
#     dependencies: {"band": "Time-Correlator Actuators"},
#     init: {
#         axis_name: "fw",
#         # It supports up to 8 filters
#         positions: {
#             # pos (rad) -> m,m
#             0.027484197:       "pass-through",     # 1
#             0.81288236:        [375.e-9, 425.e-9], # 2
#             1.598280523:       [425.e-9, 475.e-9], # 3
#             2.383674197:       [475.e-9, 525.e-9], # 4
#             3.169074197:       [525.e-9, 575.e-9], # 5
#             3.954475014:       [575.e-9, 625.e-9], # 6
#             4.739874197:       [625.e-9, 675.e-9], # 7
#             5.525274197:       [675.e-9, 725.e-9], # 8
#         },
#         cycle: 6.283185, # position of ref switch (0) after a full turn
#     },
#     affects: ["Time Correlator", "Photon counter sync", "Photon counter signal", "CL Detector"],
# }

# "TC Optical Density Filter": {
#     class: actuator.LinearActuator,
#     role: "tc-od-filter",
#     dependencies: {"density": "Time-Correlator Actuators"},
#     init: {
#         axis_name: "od",
#         # position when referenced (adjusted to be a multiple of the actuator stepsize)
#         offset: -3.00000925, # od
#         ref_start: 2.8 #  a little before the reference (inverted axis)
#     },
#     affects: ["Time Correlator", "Photon counter sync", "Photon counter signal", "CL Detector"],
# }

"Time Correlator": {
    class: picoquant400.HH400,
    role: time-correlator,
    init: {
        #device: "fake",
        device: null, # put serial number, or it will pick the first one found
        sync_level: 50.e-3, # V, discriminator for sync signal (< 1.0 V)
        sync_zc: 10.e-3, # V (< 40 mV)
        disc_volt: [30.e-3], # V, discriminator for detector 0 (< 1.0 V)
        zero_cross: [10.e-3], # V (< 40 mV)
        # shutter_axes: {
        # # internal child role of the actuator -> axis name, position when shutter is closed (ie, protected), position when opened (receiving light)
        #     "shutter0": ["x", 1, 0],
        #     "shutter1": ["x", 1, 0],
        # },
    },
    # These children allow to have access to the raw data on the PMTs
    children: {
        "detector0": "Photon counter sync",
        "detector1": "Photon counter signal",
    },
    # dependencies: {
    #     "shutter0": "Shutter 0",
    #     "shutter1": "Shutter 1",
    # },
}

"Photon counter sync": {
    # Internal child of "Time Correlator", so no class
    creator: "Time Correlator", 
    role: photo-detector1,
}

"Photon counter signal": {
    # Internal child of "Time Correlator", so no class
    creator: "Time Correlator", 
    role: photo-detector0, # det0, to be shown as main graph in GUI
}

# Mirror in Plate 2, selects between spectrometer and external optics (fiber output)
"Spectrometer Selector": {
    class: actuator.MultiplexActuator,
    role: "spec-selector",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position of the mirror to select the external spectrometer (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0126050192}, # m
        FAV_POS_ACTIVE_DEST: ["Fiber align", "Fiber Detector"],
        # FAV_POS_ACTIVE: {"x": 0.0116214336}, # m
        # FAV_POS_ACTIVE_DEST: ["Fiber align", "Time Correlator", "Photon counter sync", "Photon counter signal"],
        FAV_POS_DEACTIVE: {"x": 0.0451106487}, # m
        FAV_POS_DEACTIVE_DEST: ["Camera", "Spectrometer"], # m
    },
    affects: ["Fiber align", "Fiber Detector", "Camera", "Spectrometer",
              "Time Correlator", "Photon counter sync", "Photon counter signal"],
}

# "Shutter 0": {
#     class: actuator.MultiplexActuator,
#     role: "shutter0",
#     dependencies: {"x": "Time-Correlator Actuators"},
#     init: {
#         axes_map: {"x": "shutter0"},
#     },
#     affects: ["Time Correlator", "Photon counter sync"],
# }

# "Shutter 1": {
#     class: actuator.MultiplexActuator,
#     role: "shutter1",
#     dependencies: {"x": "Time-Correlator Actuators"},
#     init: {
#         axes_map: {"x": "shutter1"},
#     },
#     affects: ["Time Correlator", "Photon counter signal"],
# }

"Fiber Detector": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer1,
    children: {detector: "Camera", spectrograph: "Spectrograph"},
}

# Controller for moving the 'Redux' stage
# DIP must be configured with address 4 (= 0010000)
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        port: "/dev/ttyTMCM*",
        address: 4,
        #port: "/dev/fake6",
        #address: null,
        axes: ["l", "s"],
        ustepsize: [5.9e-9, 5.9e-9], # m/µstep
        #ustepsize: [3.e-6,3.e-6], #this is only for sim
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        # TODO: update for Quanta Redux stage
        FAV_POS_ACTIVE: {"l": 0.0464095534, "s": -0.0019880168},  # m, m
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    children: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: 0.17453292519 # rad (= 10°)
        # Note: if you want to use absolute moves, add a "translation" too
    },
}